open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_30_70ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_30_70ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_30_70ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_30_70ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_5_44ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_5_44ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_5_44ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_5_44ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_9_43ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_9_43ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_9_43ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_9_43ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_16_79ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_16_79ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_16_79ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_16_79ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_33_67ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_33_67ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_33_67ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_33_67ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_14_59ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_14_59ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_14_59ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_14_59ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_41_83ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_41_83ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_41_83ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_41_83ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_33_74ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_33_74ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_33_74ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_33_74ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_54_99ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_54_99ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_54_99ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_54_99ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_25_66ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_25_66ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_25_66ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_25_66ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_33_75ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_33_75ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_33_75ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_33_75ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_36_78ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_36_78ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_36_78ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_36_78ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_9_50ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_9_50ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_9_50ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_9_50ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_21_60ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_21_60ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_21_60ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_21_60ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_9_50ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_9_50ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_9_50ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_9_50ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_53_93ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_53_93ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_53_93ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_53_93ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_28_74ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_28_74ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_28_74ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_28_74ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_36_82ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_36_82ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_36_82ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_36_82ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_46_87ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_46_87ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_46_87ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_46_87ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_1_41ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_1_41ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_1_41ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_1_41ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_17_58ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_17_58ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_17_58ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_17_58ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_24_87ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_24_87ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_24_87ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_24_87ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_46_87ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_46_87ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_46_87ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_46_87ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_30_75ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_30_75ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_30_75ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_30_75ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_49_91ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_49_91ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_49_91ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_49_91ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_8_71ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_8_71ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_8_71ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_8_71ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_38_78ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_38_78ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_38_78ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_38_78ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_46_91ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_46_91ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_46_91ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_46_91ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_13_52ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_13_52ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_13_52ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_13_52ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_20_65ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_20_65ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_20_65ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_20_65ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_52_99ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_52_99ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_52_99ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_52_99ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_38_79ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_38_79ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_38_79ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_38_79ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_49_91ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_49_91ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_49_91ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_49_91ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_25_59ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_25_59ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_25_59ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_25_59ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_54_95ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_54_95ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_54_95ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_54_95ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_49_84ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_49_84ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_49_84ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_49_84ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/71307226_Catsper1_25_66ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 71307226_Catsper1_25_66ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/71307226_Catsper1_25_66ishfull_sb_mask.jpg");
selectWindow("71307226_Catsper1_25_66ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_54_95ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_54_95ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_54_95ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_54_95ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_22_62ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_22_62ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_22_62ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_22_62ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_1_41ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_1_41ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_1_41ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_1_41ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_38_83ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_38_83ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_38_83ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_38_83ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75496134_Calb2_14_54ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75496134_Calb2_14_54ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75496134_Calb2_14_54ishfull_sb_mask.jpg");
selectWindow("75496134_Calb2_14_54ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_20_62ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_20_62ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_20_62ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_20_62ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_6_47ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_6_47ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_6_47ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_6_47ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_32_95ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_32_95ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_32_95ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_32_95ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_41_83ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_41_83ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_41_83ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_41_83ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_48_110ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_48_110ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_48_110ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_48_110ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_37_76ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_37_76ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_37_76ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_37_76ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_22_63ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_22_63ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_22_63ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_22_63ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_52_94ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_52_94ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_52_94ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_52_94ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_6_51ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_6_51ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_6_51ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_6_51ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_12_56ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_12_56ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_12_56ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_12_56ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_4_46ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_4_46ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_4_46ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_4_46ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_4_48ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_4_48ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_4_48ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_4_48ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_45_85ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_45_85ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_45_85ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_45_85ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_30_71ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_30_71ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_30_71ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_30_71ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_44_86ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_44_86ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_44_86ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_44_86ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74579449_LOC433525_17_58ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74579449_LOC433525_17_58ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74579449_LOC433525_17_58ishfull_sb_mask.jpg");
selectWindow("74579449_LOC433525_17_58ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_28_70ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_28_70ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_28_70ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_28_70ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/75457489_Calb1_44_91ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 75457489_Calb1_44_91ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/75457489_Calb1_44_91ishfull_sb_mask.jpg");
selectWindow("75457489_Calb1_44_91ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/77620754_Ddx17_40_102ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 77620754_Ddx17_40_102ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/77620754_Ddx17_40_102ishfull_sb_mask.jpg");
selectWindow("77620754_Ddx17_40_102ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/70523811_Rnf25_14_55ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 70523811_Rnf25_14_55ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/70523811_Rnf25_14_55ishfull_sb_mask.jpg");
selectWindow("70523811_Rnf25_14_55ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/73513814_Gpr17_17_51ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 73513814_Gpr17_17_51ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/73513814_Gpr17_17_51ishfull_sb_mask.jpg");
selectWindow("73513814_Gpr17_17_51ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/69838649_Cox6b2_22_67ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 69838649_Cox6b2_22_67ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/69838649_Cox6b2_22_67ishfull_sb_mask.jpg");
selectWindow("69838649_Cox6b2_22_67ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74735349_Kcnk9_12_54ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74735349_Kcnk9_12_54ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74735349_Kcnk9_12_54ishfull_sb_mask.jpg");
selectWindow("74735349_Kcnk9_12_54ishfull_sb_edges.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Edges/74357601_Slc7a6_29_68ishfull_sb_edges.jpg");
run("Auto Threshold", "method=Li white");
run("Fill Holes");
run("Watershed");
run("Analyze Particles...", "size=210000-Infinity circularity=0.00-1.00 show=Masks display clear summarize add");
selectWindow("Mask of 74357601_Slc7a6_29_68ishfull_sb_edges.jpg"); 
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Segmented/SegmentedMask/74357601_Slc7a6_29_68ishfull_sb_mask.jpg");
selectWindow("74357601_Slc7a6_29_68ishfull_sb_edges.jpg");
run("Close All");
run("Quit");
