open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_14_55ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_14_55ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_52_99ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_52_99ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_44_91ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_44_91ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_4_48ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_4_48ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_17_58ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_17_58ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_25_66ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_25_66ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_38_83ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_38_83ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_54_95ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_54_95ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_46_87ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_46_87ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_24_87ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_24_87ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_14_54ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_14_54ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_46_91ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_46_91ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_29_68ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_29_68ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_33_75ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_33_75ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_30_75ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_30_75ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_6_51ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_6_51ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_44_86ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_44_86ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_9_50ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_9_50ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_22_62ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_22_62ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_13_52ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_13_52ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_20_62ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_20_62ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_17_58ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_17_58ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_9_43ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_9_43ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_9_50ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_9_50ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_49_91ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_49_91ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_54_95ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_54_95ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_20_65ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_20_65ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_1_41ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_1_41ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_28_70ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_28_70ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_25_66ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_25_66ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_22_63ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_22_63ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_45_85ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_45_85ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_12_54ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_12_54ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_22_67ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_22_67ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_25_59ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_25_59ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_28_74ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_28_74ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_30_71ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_30_71ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_52_94ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_52_94ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_49_91ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_49_91ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_49_84ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_49_84ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_33_67ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_33_67ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/73513814_Gpr17_17_51ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/73513814_Gpr17_17_51ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_40_102ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_40_102ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_36_82ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_36_82ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75457489_Calb1_12_56ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75457489_Calb1_12_56ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_14_59ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_14_59ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_36_78ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_36_78ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_37_76ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_37_76ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_6_47ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_6_47ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_30_70ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_30_70ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_33_74ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_33_74ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_48_110ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_48_110ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_53_93ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_53_93ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_21_60ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_21_60ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/69838649_Cox6b2_54_99ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/69838649_Cox6b2_54_99ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/71307226_Catsper1_41_83ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/71307226_Catsper1_41_83ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_41_83ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_41_83ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_32_95ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_32_95ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_16_79ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_16_79ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/75496134_Calb2_38_78ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/75496134_Calb2_38_78ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74357601_Slc7a6_5_44ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74357601_Slc7a6_5_44ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/77620754_Ddx17_8_71ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/77620754_Ddx17_8_71ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74579449_LOC433525_1_41ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74579449_LOC433525_1_41ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_46_87ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_46_87ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/70523811_Rnf25_38_79ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/70523811_Rnf25_38_79ishfull_sbthres.jpg");
run("Close All");
open("/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/SB/74735349_Kcnk9_4_46ishfull_sb.jpg");
run("Auto Threshold", "method=MinError(I) white");
saveAs("Jpeg", "/Users/helenlramsden/Dropbox/Projects/Ramsden_MECgeneexpression/Example_Results/Images/Thresh/74735349_Kcnk9_4_46ishfull_sbthres.jpg");
run("Close All");
run("Quit");
